PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = tSwitchTest2
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Routines
  Routine trial
    ImageComponent trialGrid
      image [set every repeat] = $gridImg
      pos [set every repeat] = (gLoc1, gLoc2)
      size [set every repeat] = (gSize1, gSize2)
      startVal [time (s)] = 0.0
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    ImageComponent trialShape
      image [set every repeat] = $shapeStim
      pos [set every repeat] = (loc1, loc2)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    CodeComponent trialCode
      Code Type = Auto->JS
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      Begin Routine:
        trialText.text = str(trials.thisN)

        if trials.thisN == 0:
            continueRoutine = False

        if condsFile == "tSwitchCond1.xlsx":
            gridImg = "grid2a.png"
            gLoc1 = 0
            gLoc2 = 0.12
            gSize1 = 0.5
            gSize2 = 0.25
            if trials.thisN%2 == 0:
                loc1 = -0.12
                loc2 = 0.12
            elif trials.thisN%2 == 1:
                loc1 = 0.12
                loc2 = 0.12
            else:
                loc1 = -0.12
                loc2 = 0.12
        elif condsFile == "tSwitchCond2.xlsx":
            gridImg = "grid2a.png"
            gLoc1 = 0
            gLoc2 = -0.12
            gSize1 = 0.5
            gSize2 = 0.25
            if trials.thisN%2 == 0:
                loc1 = -0.12
                loc2 = -0.12
            elif trials.thisN%2 == 1:
                loc1 = 0.12
                loc2 = -0.12
            else:
                loc1 = -0.12
                loc2 = 0.12
        elif condsFile == "tSwitchCond3.xlsx":
            gridImg = "grid4a.png"
            gLoc1 = 0
            gLoc2 = 0
            gSize1 = 0.5
            gSize2 = 0.5
            if trials.thisN%4 == 0:
                loc1 = -0.12
                loc2 = 0.12
            elif trials.thisN%4 == 1:
                loc1 = 0.12
                loc2 = 0.12
            elif trials.thisN%4 == 2:
                loc1 = 0.12
                loc2 = -0.12
            elif trials.thisN%4 == 3:
                loc1 = -0.12
                loc2 = -0.12
            else:
                loc1 = -0.12
                loc2 = 0.12
        else:
            continueRoutine = False
    KeyboardComponent key_resp
      allowedKeys = 'space'
      correctAns = $corrAns
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
      syncScreenRefresh = False
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    TextComponent trialText
      letterHeight = 0.05
      pos = (0.4, 0.4)
      startVal [time (s)] = 0.0
      text = A
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  Routine setup
    CodeComponent setupCode
      Code Type = Auto->JS
    CodeComponent JSCode
      Code Type = Auto->JS
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  Routine instr
    CodeComponent instrCode
      Code Type = Auto->JS
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      Begin Routine:
        loc1 = -0.12
        loc2 = 0.12
        gLoc1 = 0
        gLoc2 = 0
        gridImg = "grid4a.png"
        gSize1 = 0.5
        gSize2 = 0.5
    TextComponent instrText
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Space to continue.
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    KeyboardComponent instrResp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instr_2
Flow
  Routine setup
  LoopInitiator taskLoop loopType="TrialHandler"
    conditionsFile = taskCond.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('condsFile', 'tSwitchCond1.xlsx')]),
      OrderedDict([('condsFile', 'tSwitchCond2.xlsx')]),
      OrderedDict([('condsFile', 'tSwitchCond3.xlsx')])]
    Routine instr
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $condsFile
      loopType = fullRandom
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator taskLoop
